PsychoPy2experiment version="2022.2.1"
Settings
  Data filename = '../../data_output/%s/%s/%s_%s_%s' % (participant,session,participant,session, expName + run)
  Experiment info = {'participant': '', 'session': '', 'run_num': '', 'mriMode': 'scan'}
  Full-screen window = True
  Monitor = scanProjector
  Screen = 1
  Show info dlg = False
  Units = pix
  Window size (pixels) = [1792, 1120]
  color = $(-1.0000, -1.0000, -1.0000)
  expName = EPROJ
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine trial
    PolygonComponent task_frame_trial
      fillColor = $(0.7647, 0.7647, 0.7647)
      lineColor = $(0.7647, 0.7647, 0.7647)
      pos = (offset_x+0, offset_y+0)
      shape = rectangle
      size = (box_w,box_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    TextComponent EprojStimuli
      color = black
      letterHeight = letter_h
      pos = (pos_x+offset_x, pos_y+offset_y)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      units = pix
      wrapWidth = pos_wrap
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      text [set every repeat]:
        $Question
    KeyboardComponent EprojResponse
      allowedKeys [set every repeat] = usable_keys
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      store = first key
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        import time
        expInfo['expStartWallTime'] = time.ctime()
      Begin Routine:
        EprojStimuli.alignText = 'left'

        timePrecise.reset()
        hasResponded = False

        eproj_trials.addData('globalClockTime_start',globalClock.getTime())
      Each Frame:
        if EprojResponse.keys and not hasResponded:
            hasResponded = True

            respTime = EprojResponse.rt

            # log some stuffs
            #
            # task_blocks.addData('actualChoiceOffset', fmriClock.getTime())
            # task_blocks.addData('responseTime', respTime)
      End Routine:
        logging.flush()

        eproj_trials.addData('globalClockTime_end',globalClock.getTime())
        eproj_trials.addData('trial_duration',timePrecise.getTime())
  Routine Variable_Setting_Eproj
    CodeComponent variables
      Code Type = Py
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      Before Experiment:
        import pandas as pd
        exp_info = pd.read_csv('../exp_info.csv')

        participant=str(exp_info.at[0, 'participant'])
        session=str(exp_info.at[0,'session'])
        mriMode=str(exp_info.at[0,'mriMode'])
        offset_x=exp_info.at[0,'offset_x']
        offset_y=exp_info.at[0,'offset_y']
        run=str(exp_info.at[0,'EPROJ_run'])

        print('Participant: ' + participant)
        print('Session: ' + session)
        print('Run Number: ' + run)
        print('Offset_X: ' + str(offset_x))
        print('Offset_Y: ' + str(offset_y))
        print('MRI Mode: ' + mriMode)

        LeftIndex='9'
        LeftMiddle='8'
        LeftRing='7'

        #RightIndex='2'
        #LeftIndex='7'
        usable_keys=['1','2','3']
        # trigger='equal'

        # Shared Variables
        box_w=848
        box_h=848

        fix_w=25
        fix_h=25

        stay_still_h=40
        stay_still_y=60

        # EPROJ
        letter_h=38
        stimulus_duration=10
        pos_x=15
        pos_y=0
        pos_wrap=695


        timePrecise=core.Clock()
      Begin Experiment:
        import os

        # Filename=os.path.join('itis','csv',expInfo['participant'],expInfo['session'] + '.csv')
        # print 'Loading from ', Filename


        import time
        expInfo['expStartWallTime'] = time.ctime()

        expInfo['participant']=participant
        expInfo['session']=session
        expInfo['run_num']=run
        expInfo['mriMode']=mriMode
      End Experiment:
        exp_info.at[0, 'EPROJ_run'] =  (int(expInfo['run_num'])+1)
        exp_info.to_csv('../exp_info.csv', index=False)
  Routine Eproj_Instructions
    ImageComponent Eproj_Instruction_Screen
      image = Supporting_Files/Screens/EPROJ.png
      pos [set every repeat] = (offset_x+0, offset_y+0)
      size = (848,848)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent E_key_resp_42
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent SyncGenerator_CC
      Code Type = Auto->JS
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      Before Experiment:
        import threading

        class SyncGenerator(threading.Thread):

            def __init__(self, TR=1.0, TA=1.0, volumes=617, sync='equal', skip=0,
                         sound=False, **kwargs):
                """Class for a character-emitting metronome thread
                (emulate MR sync pulse).

                Aim: Allow testing of temporal robustness of fMRI scripts by emulating
                a hardware sync pulse. Adds an arbitrary 'sync' character to the key
                buffer, with sub-millisecond precision (less precise if CPU is maxed).
                Recommend: TR=1.000 or higher and less than 100% CPU. Shorter TR
                --> higher CPU load.

                Parameters:
                    TR:      seconds between volume acquisitions
                    TA:      seconds to acquire one volume
                    volumes: number of 3D volumes to obtain in a given scanning run
                    sync:    character used as flag for sync timing, default='5'
                    skip:    how many frames to silently omit initially during T1
                             stabilization, no sync pulse. Not needed to test script
                             timing, but will give more accurate feel to start of run.
                             aka "discdacqs".
                    sound:   simulate scanner noise
                """
                if TR < 0.1:
                    msg = 'SyncGenerator:  whole-brain TR < 0.1 not supported'
                    raise ValueError(msg)
                self.TR = TR
                self.TA = TA
                self.hogCPU = 0.035
                self.timesleep = self.TR
                self.volumes = int(volumes)
                self.sync = sync
                self.skip = skip
                self.playSound = sound
                if self.playSound:  # pragma: no cover
                    self.sound1 = Sound(800, secs=self.TA, volume=0.15, autoLog=False)
                    self.sound2 = Sound(813, secs=self.TA, volume=0.15, autoLog=False)

                self.clock = core.Clock()
                self.stopflag = False
                threading.Thread.__init__(self, None, 'SyncGenerator', None)
                self.running = False

            def run(self):
                self.running = True
                if self.skip:
                    for i in range(int(self.skip)):
                        if self.playSound:  # pragma: no cover
                            self.sound1.play()
                            self.sound2.play()
                        # emulate T1 stabilization without data collection
                        core.wait(self.TR, hogCPUperiod=0)
                self.clock.reset()
                for vol in range(1, self.volumes + 1):
                    if self.playSound:  # pragma: no cover
                        self.sound1.play()
                        self.sound2.play()
                    if self.stopflag:
                        break
                    # "emit" a sync pulse by placing a key in the buffer:
                    event._onPygletKey(symbol=self.sync, modifiers=0,
                                       emulated=True)
                    # wait for start of next volume, doing our own hogCPU for
                    # tighter sync:
                    core.wait(self.timesleep - self.hogCPU, hogCPUperiod=0)
                    while self.clock.getTime() < vol * self.TR:
                        pass  # hogs the CPU for tighter sync
                self.running = False
                return self


            def stop(self):
                self.stopflag = True
  Routine fixation_inner
    PolygonComponent task_frame_fix3
      fillColor = $(0.7647, 0.7647, 0.7647)
      lineColor = $(0.7647, 0.7647, 0.7647)
      pos = (offset_x+0, offset_y+0)
      shape = rectangle
      size = (box_w,box_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    ImageComponent E_fix_pres
      image = Supporting_Files/Images/Black_Grey_Crosshair.png
      interpolate = nearest
      pos = (offset_x+0, offset_y+0)
      size = (fix_w, fix_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      texture resolution = 512
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    KeyboardComponent Eproj_offtime_Response
      allowedKeys [set every repeat] = usable_keys
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      store = first key
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  Routine fixation_wrap
    PolygonComponent task_frame_fix2
      fillColor = $(0.7647, 0.7647, 0.7647)
      lineColor = $(0.7647, 0.7647, 0.7647)
      pos = (offset_x+0, offset_y+0)
      shape = rectangle
      size = (box_w,box_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    ImageComponent E_fix_wrap
      image = Supporting_Files/Images/Black_Grey_Crosshair.png
      interpolate = nearest
      pos = (offset_x+0, offset_y+0)
      size = (fix_w, fix_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      texture resolution = 512
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  Routine fixation_init
    PolygonComponent task_frame_fix1
      fillColor = $(0.7647, 0.7647, 0.7647)
      lineColor = $(0.7647, 0.7647, 0.7647)
      pos = (offset_x+0, offset_y+0)
      shape = rectangle
      size = (box_w,box_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      units = pix
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    ImageComponent E_fix_init
      image = Supporting_Files/Images/Black_Grey_Crosshair.png
      interpolate = nearest
      pos = (offset_x+0, offset_y+0)
      size = (fix_w, fix_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      texture resolution = 512
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  Routine Eproj_waitForFinish
    CodeComponent finishCode_CC
      Code Type = Auto->JS
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      Begin Experiment:
        # EXP_DURATION = 617
      End Routine:
        logging.exp("Experiment Finished")
  Routine Eproj_ReadyScreen
    PolygonComponent polygon_fix
      fillColor = $(0.7647, 0.7647, 0.7647)
      lineColor = $(0.7647, 0.7647, 0.7647)
      pos = (offset_x, offset_y)
      shape = rectangle
      size = (box_w,box_h)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .1
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    ImageComponent Ready_E
      image = Supporting_Files/Images/Black_Grey_Crosshair.png
      pos = (offset_x+0, offset_y+0)
      size = (fix_w, fix_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      texture resolution = 512
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    TextComponent stay_still_a_CC
      color = black
      letterHeight = stay_still_h
      pos = (offset_x+0, offset_y+stay_still_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = STAY VERY STILL
      wrapWidth = 1000
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    TextComponent stay_still_b_CC
      color = black
      letterHeight = stay_still_h
      pos = (offset_x+0, offset_y-stay_still_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = STAY VERY STILL
      wrapWidth = 1000
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    CodeComponent trigger_code_Eproj
      Code Type = Py
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      Begin Experiment:
        fmriClock = core.Clock() # clock for syncing with fMRI scanner

        #trigger = 'parallel'
        trigger = 'usb'
        if trigger == 'parallel':
            from psychopy import parallel
        elif trigger == 'usb':
           from psychopy.hardware.emulator import launchScan


        settings = {
           'TR': 2, # duration (sec) per volume
          'volumes': 309, # number of whole 3D volumes / frames
          'sync': ['num_add', 'equal'], # character to use as the sync timing event; assumed to come at start of a volume
          'skip': 0, # number of volumes lacking a sync pulse at start of scan for T1 stab -- (? LMD)
        }
      Begin Routine:
        if expInfo['mriMode'] != 'test': # or 'scan' !
            assert expInfo['mriMode'] == 'scan'

        #### #       waitMsgStim = visual.TextStim(win, color='White', text=wait_msg)
        ### #       waitMsgStim.draw()
        ### #       win.flip()
      Each Frame:
        #if key_resp_trigger.keys == trigger:
        #    task_format_inst.finished = True
        #    continueRoutine = False
      End Routine:
        globalClock=fmriClock
        mode=expInfo['mriMode']
        wait_timeout=300
        log=True
        instr='select Scan or Test, press enter'
        wait_msg='waiting'
        simResponses=None
        esc_key='escape'

        if not 'sync' in settings:
                settings.update({'sync': '5'})
        if not 'skip' in settings:
                settings.update({'skip': 0})
        try:
                wait_timeout = max(0.01, float(wait_timeout))
        except ValueError:
                msg = "wait_timeout must be number-like, but instead it was {}."
                raise ValueError(msg.format(wait_timeout))

        stringify = lambda x: "{}".format(x)  # convert to str/unicode
        if type(settings['sync']) == list:
            settings['sync'] = list(map(stringify, settings['sync']))
        if type(settings['sync']) == str:
            settings['sync'] = stringify(settings['sync'])

        settings['TR'] = float(settings['TR'])
        settings['volumes'] = int(settings['volumes'])
        settings['skip'] = int(settings['skip'])
        msg = "vol: %(volumes)d  TR: %(TR).3fs  skip: %(skip)d  sync: '%(sync)s'"
        runInfo = msg % settings

        if log:  # pragma: no cover
                logging.exp('launchScan: ' + runInfo)

        instructions = visual.TextStim(
                win, text=instr, height=.05, pos=(0, 0), color=.4, autoLog=False)

        parameters = visual.TextStim(
                win, text=runInfo, height=.05, pos=(0, -0.5), color=.4, autoLog=False)

            # if a valid mode was specified, use it; otherwise query via RatingScale:
        mode = "{}".format(mode).capitalize()
        if mode not in ['Scan', 'Test']:
                run_type = visual.RatingScale(win, choices=['Scan', 'Test'],
                                              marker='circle',
                                              markerColor='DarkBlue', size=.8,
                                              stretch=.3, pos=(0.8, -0.9),
                                              markerStart='Test',
                                              lineColor='DarkGray', autoLog=False)
                while run_type.noResponse:
                    instructions.draw()
                    parameters.draw()
                    run_type.draw()
                    win.flip()
                    if event.getKeys([esc_key]):
                        break
                mode = run_type.getRating()

        doSimulation = bool(mode == 'Test')

        win.mouseVisible = False
        if doSimulation:
                wait_msg += ' (simulation)'
        #    msg = visual.TextStim(win, color='DarkGray', text=wait_msg, autoLog=False)
        #    msg.draw()
        #    win.flip()


        event.clearEvents()  # do before starting the threads
        if doSimulation:
                syncPulse = SyncGenerator(TR=1,TA=1,volumes=617, sync='equal', skip=0, sound=False)
                syncPulse.start()  # start emitting sync pulses
                core.runningThreads.append(syncPulse)
                if simResponses:
                    roboResponses = ResponseEmulator(simResponses)
                    # start emitting simulated user responses
                    roboResponses.start()
                    core.runningThreads.append(roboResponses)

        # wait for first sync pulse:

        timeoutClock = core.Clock()  # zeroed now

        allKeys = []
        while True:
            allKeys = event.getKeys()
            if allKeys:
                print('allKeys', allKeys)
                print('settings[sync]', settings['sync'])
                print(type(settings['sync']))
            if type(settings['sync']) == list and any([key in allKeys for key in settings['sync']]):
                break
            if type(settings['sync']) == str and settings['sync'] in allKeys:
                break
            if esc_key and esc_key in allKeys:  # pragma: no cover
                core.quit()
            if timeoutClock.getTime() > wait_timeout:
                msg = 'Waiting for scanner has timed out in %.3f seconds.'
                raise RuntimeError(msg % wait_timeout)

        #allKeys = []
        # while not settings['sync'] in allKeys:
        #print('allKeys', allKeys)
        #print('settings[sync]', settings['sync'])
        #while not any([key in allKeys for key in settings['sync']]) if type(settings['sync']) == list else \
        #        not settings['sync'] in allKeys:
        #    allKeys = event.getKeys()
        #    if esc_key and esc_key in allKeys:  # pragma: no cover
        #        core.quit()
        #    if timeoutClock.getTime() > wait_timeout:
        #        msg = 'Waiting for scanner has timed out in %.3f seconds.'
        #        raise RuntimeError(msg % wait_timeout)
        if globalClock:
                globalClock.reset()
        if log:  # pragma: no cover
                logging.exp('launchScan: start of scan')
            # blank the screen on first sync pulse received:

        elapsed = 1










        #if trigger == 'usb':
        #       vol = launchScan(win, MR_settings, wait_msg='STAY VERY STILL',
        #             globalClock=fmriClock, # <-- how you know the time!
        #             mode=expInfo['mriMode']) # <-- mode passed in
        #elif trigger == 'parallel':
        #       parallel.setPortAddress(0x378)
        #       pin = 10; wait_msg = ""
        #       pinStatus = parallel.readPin(pin)
        #       while True:
        #           if pinStatus != parallel.readPin(pin) or len(event.getKeys('esc')):
        #              break
        #              # start exp when pin values change
        #       globalClock.reset()
        #       logging.defaultClock.reset()
        #       logging.exp('parallel trigger: start of scan')
        #       win.flip()  # blank the screen on first sync pulse received
        #else:
        #   fmriClock.reset()

        expInfo['triggerWallTime'] = time.ctime()
        #core.wait(1)



        routineTimer.reset()
  Routine fixation_wrap_end
    PolygonComponent task_frame_fix2_2
      fillColor = $(0.7647, 0.7647, 0.7647)
      lineColor = $(0.7647, 0.7647, 0.7647)
      pos = (offset_x+0, offset_y+0)
      shape = rectangle
      size = (box_w,box_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    ImageComponent E_fix_wrap_2
      image = Supporting_Files/Images/Black_Grey_Crosshair.png
      interpolate = nearest
      pos = (offset_x+0, offset_y+0)
      size = (fix_w, fix_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      texture resolution = 512
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  Routine blank
    PolygonComponent task_frame_blank
      fillColor = $(0.7647, 0.7647, 0.7647)
      lineColor = $(0.7647, 0.7647, 0.7647)
      pos = (offset_x+0, offset_y+0)
      shape = rectangle
      size = (box_w,box_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = pix
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Flow
  Routine Variable_Setting_Eproj
  Routine Eproj_Instructions
  Routine Eproj_ReadyScreen
  Routine fixation_init
  LoopInitiator eproj_trials loopType="TrialHandler"
    conditionsFile = $"Supporting_Files/Spreadsheets/Eproj_Scan_Run" + expInfo['run_num'] +".xlsx"
    loopType = sequential
    nReps = 1
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    Routine fixation_inner
    Routine trial
  LoopTerminator eproj_trials
  Routine fixation_wrap
  Routine blank
  Routine Eproj_waitForFinish
