PsychoPy2experiment version="2021.1.4"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Data filename = '../../data_output/%s/%s/%s_%s_%s' % (participant,session,participant,session, expName)
  Experiment info = {'': ''}
  Full-screen window = True
  Monitor = scanProjector
  Screen = 1
  Show info dlg = False
  Units = pix
  Use version = 2021.1.4
  Window size (pixels) = [1792, 1120]
  color = $[-1.000,-1.000,-1.000]
  expName = VIS_CAL_SCAN
  logging level = debug
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Routines
  Routine Y_Adjust
    PolygonComponent adjust_back
      fillColor = $(0.7647, 0.7647, 0.7647)
      lineColor = None
      pos [set every frame] = (offset_x, offset_y)
      shape = rectangle
      size = (windowSize, windowSize)
      startVal [time (s)] = 0.0
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    PolygonComponent botLeftBlack
      fillColor = black
      lineColor = none
      pos [set every frame] = (offset_x-nearPos, offset_y-nearPos)
      shape = rectangle
      size = (colorSize, colorSize) 
      startVal [time (s)] = 0.0
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    PolygonComponent botRightBlack
      fillColor = black
      lineColor = none
      pos [set every frame] = (offset_x+nearPos, offset_y-nearPos)
      shape = rectangle
      size = (colorSize, colorSize) 
      startVal [time (s)] = 0.0
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    PolygonComponent topRightBlack
      fillColor = black
      lineColor = none
      pos [set every frame] = (offset_x+nearPos, offset_y+nearPos)
      shape = rectangle
      size = (colorSize, colorSize) 
      startVal [time (s)] = 0.0
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    PolygonComponent topLeftBlack
      fillColor = black
      lineColor = none
      pos [set every frame] = (offset_x-nearPos, offset_y+nearPos)
      shape = rectangle
      size = (colorSize, colorSize) 
      startVal [time (s)] = 0.0
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    PolygonComponent botLeftYel
      fillColor = yellow
      lineColor = none
      pos [set every frame] = (offset_x-farPos, offset_y-nearPos)
      shape = rectangle
      size = (colorSize, colorSize) 
      startVal [time (s)] = 0.0
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    PolygonComponent botRightYel
      fillColor = yellow
      lineColor = none
      pos [set every frame] = (offset_x+farPos, offset_y-nearPos)
      shape = rectangle
      size = (colorSize, colorSize) 
      startVal [time (s)] = 0.0
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    PolygonComponent topRightYel
      fillColor = yellow
      lineColor = none
      pos [set every frame] = (offset_x+farPos, offset_y+nearPos)
      shape = rectangle
      size = (colorSize, colorSize) 
      startVal [time (s)] = 0.0
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    PolygonComponent topLeftYel
      fillColor = yellow
      lineColor = none
      pos [set every frame] = (offset_x-farPos, offset_y+nearPos)
      shape = rectangle
      size = (colorSize, colorSize) 
      startVal [time (s)] = 0.0
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    PolygonComponent botRightMag
      fillColor = magenta
      lineColor = none
      pos [set every frame] = (offset_x+nearPos, offset_y-farPos)
      shape = rectangle
      size = (colorSize, colorSize) 
      startVal [time (s)] = 0.0
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    PolygonComponent botLeftMag
      fillColor = magenta
      lineColor = none
      pos [set every frame] = (offset_x-nearPos, offset_y-farPos)
      shape = rectangle
      size = (colorSize, colorSize) 
      startVal [time (s)] = 0.0
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    PolygonComponent topRightMag
      fillColor = magenta
      lineColor = none
      pos [set every frame] = (offset_x+nearPos, offset_y+farPos)
      shape = rectangle
      size = (colorSize, colorSize) 
      startVal [time (s)] = 0.0
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    PolygonComponent topLeftMag
      fillColor = magenta
      lineColor = none
      pos [set every frame] = (offset_x-nearPos, offset_y+farPos)
      shape = rectangle
      size = (colorSize, colorSize) 
      startVal [time (s)] = 0.0
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    PolygonComponent botRightCyan
      fillColor = cyan
      lineColor = none
      pos [set every frame] = (offset_x+farPos, offset_y-farPos)
      shape = rectangle
      size = (colorSize, colorSize) 
      startVal [time (s)] = 0.0
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    PolygonComponent botLeftCyan
      fillColor = cyan
      lineColor = none
      pos [set every frame] = (offset_x-farPos, offset_y-farPos)
      shape = rectangle
      size = (colorSize, colorSize) 
      startVal [time (s)] = 0.0
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    PolygonComponent topRightCyan
      fillColor = cyan
      lineColor = none
      pos [set every frame] = (offset_x+farPos, offset_y+farPos)
      shape = rectangle
      size = (colorSize, colorSize) 
      startVal [time (s)] = 0.0
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    PolygonComponent topLeftCyan
      fillColor = cyan
      lineColor = none
      pos [set every frame] = (offset_x-farPos, offset_y+farPos)
      shape = rectangle
      size = (colorSize, colorSize) 
      startVal [time (s)] = 0.0
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    ImageComponent fix_pres
      image = Supporting_Files/Screens/Black_Grey_Crosshair.png
      pos [set every repeat] = (offset_x, offset_y)
      size = (25,25)
      startVal [time (s)] = 0.0
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    TextComponent UP
      color = black
      letterHeight = 30
      pos [set every repeat] = (offset_x, offset_y+(windowSize/4))
      startVal [time (s)] = 0.0
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      text:
        7

        6

        5

        4

        3

        2

        1
    TextComponent DOWN
      color = black
      letterHeight = 30
      pos [set every repeat] = (offset_x, offset_y-(windowSize/4))
      startVal [time (s)] = 0.0
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      text:
        -1

        -2

        -3

        -4

        -5

        -6

        -7
    TextComponent LEFT
      color = black
      letterHeight = 30
      pos [set every repeat] = (offset_x-(windowSize/4), offset_y)
      startVal [time (s)] = 0.0
      text = A     B     C     D     E     F    G     
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    TextComponent RIGHT
      color = black
      letterHeight = 30
      pos [set every repeat] = (offset_x+(windowSize/4), offset_y)
      startVal [time (s)] = 0.0
      text =      H     I     J     K     L     M     N
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    KeyboardComponent adj_press
      allowedKeys = 'up', 'down', 'left', 'right', 'space', 'r'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Both
      Before Experiment:
        import pandas as pd
        exp_info = pd.read_csv('../exp_info.csv')

        participant=exp_info.at[0, 'participant']
        session=exp_info.at[0,'session']
        mriMode=exp_info.at[0,'mriMode']


        offset_x=0
        offset_y=0

        windowSize=848
        colorSize=100
        farPos=(windowSize/2)-(colorSize/2)
        nearPos=(windowSize/2)-((colorSize/2)*3)
        cornerPos=(windowSize/2)-(15)
      Begin Experiment:
        expInfo['participant']=participant
        expInfo['session']=session
        expInfo['mriMode']=mriMode
      Each Frame:
        if adj_press.keys == 'up':
            if offset_y < 80:
                offset_y=offset_y+20
            continueRoutine = False
        elif adj_press.keys == 'down':
            if offset_y > -80:
                offset_y=offset_y-20
            continueRoutine = False
        elif adj_press.keys == 'left':
            if offset_x > -100:
                offset_x=offset_x-20
            continueRoutine = False
        elif adj_press.keys == 'right':
            if offset_x < 100:
                offset_x=offset_x+20
            continueRoutine = False
        #elif adj_press.keys == 'r':
        #    offset_x=0
        #    offset_y=0
        #    continueRoutine = False
        elif adj_press.keys == 'space':
            vis_cal_loop.finished = True
            continueRoutine = False
      End Experiment:
        exp_info.at[0, 'offset_x'] =  offset_x
        exp_info.at[0, 'offset_y'] =  offset_y
        exp_info.to_csv('../exp_info.csv', index=False)
  Routine vis_cal_disp
    PolygonComponent background_check
      fillColor = $(0.7647, 0.7647, 0.7647)
      lineColor = None
      pos [set every frame] = (offset_x, offset_y)
      shape = rectangle
      size = (windowSize, windowSize)
      startVal [time (s)] = 0.0
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    ImageComponent middle_fix
      image = Supporting_Files/Screens/Black_Grey_Crosshair.png
      pos [set every repeat] = (offset_x, offset_y)
      size = (25,25)
      startVal [time (s)] = 0.0
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    ImageComponent top_right_fix
      image = Supporting_Files/Screens/Black_Grey_Crosshair.png
      pos [set every repeat] = (offset_x+cornerPos, offset_y+cornerPos)
      size = (25,25)
      startVal [time (s)] = 0.0
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    ImageComponent top_left_fix
      image = Supporting_Files/Screens/Black_Grey_Crosshair.png
      pos [set every repeat] = (offset_x-cornerPos, offset_y+cornerPos)
      size = (25,25)
      startVal [time (s)] = 0.0
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    ImageComponent bottom_left_fix
      image = Supporting_Files/Screens/Black_Grey_Crosshair.png
      pos [set every repeat] = (offset_x-cornerPos, offset_y-cornerPos)
      size = (25,25)
      startVal [time (s)] = 0.0
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    ImageComponent bottom_right_fix
      image = Supporting_Files/Screens/Black_Grey_Crosshair.png
      pos [set every repeat] = (offset_x+cornerPos, offset_y-cornerPos)
      size = (25,25)
      startVal [time (s)] = 0.0
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    KeyboardComponent cal_check_resp
      allowedKeys = 'space', 'r'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Both
      Begin Routine:
        print("SPACE to continue, R to reset")
      Each Frame:
        if cal_check_resp.keys == 'r':
            continueRoutine = False
        if cal_check_resp.keys == 'space':
            redo_screencal.finished = True
            continueRoutine = False
Flow
  LoopInitiator redo_screencal loopType="TrialHandler"
    loopType = sequential
    nReps = 50
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    LoopInitiator vis_cal_loop loopType="TrialHandler"
      loopType = sequential
      nReps = 500
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      Routine Y_Adjust
    LoopTerminator vis_cal_loop
    Routine vis_cal_disp
  LoopTerminator redo_screencal
